(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingImageDimension 3)
(UseDirectionCosines "true")

// **************** Main Components **************************

(Registration "MultiMetricMultiResolutionRegistration")
(Interpolator "BSplineInterpolator")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")

(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")

(Optimizer "AdaptiveStochasticGradientDescent")
(Transform "BSplineTransform")
//(Metric "TransformBendingEnergyPenalty")
(Metric "AdvancedMattesMutualInformation" "TransformBendingEnergyPenalty")
//(Metric "AdvancedNormalizedCorrelation" "TransformBendingEnergyPenalty")
//(Metric "AdvancedMattesMutualInformation") 
(Metric0Weight 0.5)
(Metric1Weight 0.8) // OPTIMIZED BY QUANTITATIVE MEASURES


(MaximumStepLength 1)

// ***************** Transformation **************************
(NumberOfResolutions 5)
(FinalGridSpacingInVoxels 10)
(GridSpacingSchedule 16 12 6 2 1)
(HowToCombineTransforms "Compose")

// ******************* Similarity measure *********************

(NumberOfHistogramBins 16) 

// ******************** Multiresolution **********************

(ImagePyramidSchedule 6 6 6  4 4 4  2 2 2  1 1 1  1 1 1)

// ******************* Optimizer ****************************

(MaximumNumberOfIterations 1000 2000 3000 4000 5000) 

// **************** Image sampling **********************
(AutomaticTransformInitializationMethod "GeometricalCenter")
(NumberOfSpatialSamples 6000) 
(NewSamplesEveryIteration "true")
//(ImageSampler "MultiInputRandomCoordinate")
(ImageSampler "RandomCoordinate")
//(ImageSampler "RandomSparseMask")
//(UseRandomSampleRegion "true")
(MaximumNumberOfSamplingAttempts 5)
(SampleRegionSize 40.0 40.0 40.0)

(UseAdaptiveStepSizes "true")
// ************* Interpolation and Resampling ****************

(BSplineInterpolationOrder 3)
(FinalBSplineInterpolationOrder 3)
(ShowExactMetricValue "false") 
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WritePyramidImagesAfterEachResolution "false")
(DefaultPixelValue 0)
(WriteResultImage "true")
(ResultImagePixelType "double")
(ResultImageFormat "nii.gz")

